# Generated by Configurator on Wed Aug 31 17:18:13 BST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,MM_ASICam_2,ASICamera,MM_ASICam
Device,MM_ASICam_3,ASICamera,MM_ASICam
Device,MM_ASICam_0,ASICamera,MM_ASICam
Device,MM_ASICam_1,ASICamera,MM_ASICam
Device,Multi Camera,Utilities,Multi Camera

# Pre-init settings for devices
Property,MM_ASICam_2,Selected Device,ZWO ASI2600MM Pro2
Property,MM_ASICam_3,Selected Device,ZWO ASI2600MM Pro3
Property,MM_ASICam_0,Selected Device,ZWO ASI2600MM Pro0
Property,MM_ASICam_1,Selected Device,ZWO ASI2600MM Pro1

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,MM_ASICam_2
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

